alias,pop,parent,dims,gating_method,gating_args,collapseDataForGating,groupBy,preprocessing_method,preprocessing_args
singletsFSC,+,root,"FSC-A,FSC-H",singletGate,,FALSE,NA,NA,
singletsSSC,+,singletsFSC,"SSC-A,SSC-H",singletGate,,FALSE,NA,NA,
singletsSSCB,+,singletsSSC,"SSC-A,SSC-B-A",singletGate,,FALSE,NA,NA,
CD45,+,singletsSSCB,PE-A,gate_mindensity,"gate_range=c(100, 150)",FALSE,NA,NA,
nonDebris,+,CD45,FSC-A,gate_mindensity,"gate_range=c(7.5e5, 1e6)",FALSE,NA,NA,
live,+,nonDebris,Zombie Violet-A,gate_mindensity,"gate_range=c(140,180)",FALSE,NA,NA,
monocytes,+,live,SSC-A,gate_mindensity,"gate_range=c(1.25e6, 1.75e6)",FALSE,NA,NA,
